<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:OpenRigs.Video;assembly=OpenRigs.Video"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ExposureTime" />
        <Property Name="Gain" />
        <Property Name="Binning" />
        <Property Name="PixelFormat" />
        <Property Name="SerialNumber" />
        <Property Name="ColorProcessing" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="CameraTriggerEventsSubjectName" Description="The name of the subject carrying trigger events from a camera controller or behavior board. " Category="Subjects" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraTriggerEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:TriggeredSpinnaker">
          <spk:Index xsi:nil="true" />
          <spk:ColorProcessing>Default</spk:ColorProcessing>
          <p1:ExposureTime>19000</p1:ExposureTime>
          <p1:Gain>0</p1:Gain>
          <p1:Binning>1</p1:Binning>
          <p1:PixelFormat>Mono8</p1:PixelFormat>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="FrameEventsSubjectName" Description="The name of the subject to which indexed, timestamped camera frames are published" Category="Subjects" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>FrameEvents</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="3" Label="Source2" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>