<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="IncludeWorkflow" Path="OpenRigs.Streaming:StreamController.bonsai">
        <RigId>MyRig</RigId>
        <SubjectId>Algernon</SubjectId>
        <SessionId>001</SessionId>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0.5S</rx:DueTime>
          <rx:Period>PT1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>42</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="OpenRigs.Streaming:PackDataMessage.bonsai">
        <StreamName>data/first</StreamName>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>142</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="OpenRigs.Streaming:PackDataMessage.bonsai">
        <StreamName>data/second</StreamName>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="OpenRigs.Streaming:PackVideoMessage.bonsai">
        <SampleInterval>PT0.2S</SampleInterval>
        <FrameSize>
          <Width>320</Width>
          <Height>240</Height>
        </FrameSize>
        <Interpolation>Linear</Interpolation>
        <StreamName>video</StreamName>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
