<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:dev="clr-namespace:;assembly=OpenRigs.Devices"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Drives the behavior board's camera trigger outputs. For each enabled trigger it writes the frequency at startup, starts the output when anything is sent to StartCameras and stops it on StopCameras. Trigger 0 shares the DO0 pin and trigger 1 the DO1 pin. A trigger that is not enabled is never written to or started, which leaves its pin free for a pulse output such as a reward valve. EnableTrigger1 is off by default. Timestamped trigger events for each camera are published on their own subjects.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="EnableTrigger0" Description="Start camera trigger 0 (CameraOutput0, the DO0 pin) and write its frequency. Off means the board never hears about trigger 0." />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="EnableTrigger1" Description="Start camera trigger 1 (CameraOutput1, the DO1 pin) and write its frequency. Leave off when DO1 drives a pulse output such as a reward valve." />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
        <rx:Name>StartCameras</rx:Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
        <rx:Name>StopCameras</rx:Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartCameras</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Trigger0Enabled</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateStartCamerasPayload">
          <beh:StartCameras>CameraOutput0</beh:StartCameras>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartCameras</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Trigger1Enabled</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateStartCamerasPayload">
          <beh:StartCameras>CameraOutput1</beh:StartCameras>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StopCameras</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Trigger0Enabled</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateStopCamerasPayload">
          <beh:StopCameras>CameraOutput0</beh:StopCameras>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StopCameras</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Trigger1Enabled</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateStopCamerasPayload">
          <beh:StopCameras>CameraOutput1</beh:StopCameras>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Trigger0Frequency" Description="The frequency, in Hz, at which to trigger cameras on Trigger0" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>50</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Trigger0Frequency</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Camera0Frequency" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateCamera0FrequencyPayload">
          <beh:Camera0Frequency>50</beh:Camera0Frequency>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Trigger0Enabled</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Trigger1Frequency" Description="The frequency, in Hz, at which to trigger cameras on Trigger1. Written only when EnableTrigger1 is set" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>50</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Trigger1Frequency</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Camera1Frequency" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateCamera1FrequencyPayload">
          <beh:Camera1Frequency>50</beh:Camera1Frequency>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Trigger1Enabled</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="BehaviorCommandsSubjectName" Description="The name of the commands subject for the behavior board that triggers camera frames" Category="Subjects" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="BehaviorEventsSubjectName" Description="The name of the subject carrying events from the behavior board that triggers camera frames" Category="Subjects" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="SubscribeSubject">
        <Name>BehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="beh:Parse">
        <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="Camera0TriggerEventsSubjectName" Description="The name of the subject to which timestamped camera trigger events Trigger0 are published" Category="Subjects" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Camera0TriggerEvents</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="beh:Parse">
        <harp:Register xsi:type="beh:TimestampedCamera1Frame" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="Camera1TriggerEventsSubjectName" Description="The name of the subject to which timestamped camera trigger events Trigger1 are published" Category="Subjects" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Camera1TriggerEvents</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="CameraReadySubjectName" Description="The name of the shared subject every TriggeredSpinnaker camera reports to when it is about to begin acquisition." Category="Subjects" />
      </Expression>
      <Expression xsi:type="rx:ReplaySubject" TypeArguments="sys:Boolean">
        <rx:Name>CameraReady</rx:Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraReady</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="CameraCount" Description="The number of triggered cameras that must report ready before the camera triggers start. Zero starts the triggers without waiting." />
        <Property Name="Timeout" DisplayName="CameraReadyTimeout" Description="The maximum time, in seconds, to wait for every camera to report ready before stopping with an error." />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dev:WaitForCameras">
          <dev:CameraCount>0</dev:CameraCount>
          <dev:Timeout>30</dev:Timeout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="4" To="7" Label="Source1" />
      <Edge From="10" To="66" Label="Source1" />
      <Edge From="66" To="11" Label="Source1" />
      <Edge From="1" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="44" Label="Source1" />
      <Edge From="14" To="67" Label="Source1" />
      <Edge From="67" To="15" Label="Source1" />
      <Edge From="5" To="15" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="44" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="2" To="19" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="44" Label="Source3" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="6" To="23" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="44" Label="Source4" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="3" To="32" Label="Source2" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="44" Label="Source5" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="7" To="41" Label="Source2" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source6" />
      <Edge From="44" To="46" Label="Source1" />
      <Edge From="45" To="46" Label="Source2" />
      <Edge From="46" To="50" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="47" To="52" Label="Source1" />
      <Edge From="47" To="56" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source2" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="53" To="55" Label="Source1" />
      <Edge From="54" To="55" Label="Source2" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="57" To="59" Label="Source1" />
      <Edge From="58" To="59" Label="Source2" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="60" To="62" Label="Source1" />
      <Edge From="62" To="64" Label="Source1" />
      <Edge From="63" To="64" Label="Source2" />
      <Edge From="64" To="65" Label="Source1" />
      <Edge From="65" To="66" Label="Source2" />
      <Edge From="65" To="67" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
