<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="OpenRigs.Vision:SyncQuad.SyncQuad.bonsai">
          <SyncQuadStateSubjectName>SyncQuadState</SyncQuadStateSubjectName>
          <QuadTriggerSubjectName>SyncQuadTrigger</QuadTriggerSubjectName>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>RngSeed</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="OpenRigs.Vision:ScreenConfiguration.bonsai">
        <DisplayDevice>Second</DisplayDevice>
        <Width>1000</Width>
        <Height>1000</Height>
        <TargetRenderFrequency>60</TargetRenderFrequency>
        <TargetUpdateFrequency>120</TargetUpdateFrequency>
        <SetDisplayCalibrationSubject>SetDisplayCalibration</SetDisplayCalibrationSubject>
        <RenderFrameSubject>RenderFrame</RenderFrameSubject>
        <Eye>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Eye>
        <NearClip>1E-05</NearClip>
        <FarClip>1000</FarClip>
        <Light>
          <X>0</X>
          <Y>0</Y>
          <Z>-10</Z>
        </Light>
        <Draw3DStimSubject>Draw3DStim</Draw3DStimSubject>
        <PostDrawingSubject>PostDrawing</PostDrawingSubject>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Lower" DisplayName="Minimum" Category="TogglePeriod" />
        <Property Name="Upper" DisplayName="Maximum" Category="TogglePeriod" />
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>RandomInterval</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>RngSeed</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Lower" />
              <Property Name="Upper" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>2</p1:Lower>
                <p1:Upper>6</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT4.486S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Index</Selector>
      </Expression>
      <Expression xsi:type="Mod">
        <Operand xsi:type="IntProperty">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="IntProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>SyncQuadColor</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PostDrawing</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateViewportState">
          <gl:X>0</gl:X>
          <gl:Y>0</gl:Y>
          <gl:Width>1</gl:Width>
          <gl:Height>1</gl:Height>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>0</Left>
        <Right>1</Right>
        <Bottom>0</Bottom>
        <Top>1</Top>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SyncQuadColor</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
        <ExtentX>1</ExtentX>
        <ExtentY>1</ExtentY>
        <LocationX>0.08148148</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
        <ColorR>1</ColorR>
        <ColorG>1</ColorG>
        <ColorB>1</ColorB>
        <ColorA>1</ColorA>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="13" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="19" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>